PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = IATExp
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Routines
  Routine trial
    TextComponent targetText
      color = $[-1.000,-1.000,1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.25
      text [set every repeat] = $targetWord
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    KeyboardComponent resp
      allowedKeys = 'i', 'e'
      correctAns = $corrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      storeCorrect = True
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  Routine trialFB
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialFBmsg=[] #initialize
      Begin Routine:
        if resp.corr == 0:
            trialFBmsg = 'error!'
            trialFBdur = 0.5
        else:
            trialFBmsg = ' '
            trialFBdur = 0
            nCorr += 1
        nTrials += 1
    TextComponent trialFBtext
      color = red
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialFBdur
      text [set every repeat] = $trialFBmsg
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  Routine blockInstr
    CodeComponent countBlocks
      Code Type = Auto->JS
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      Begin Experiment:
        blockNo = 0
        blockMsg = []
        trialPick = []
      Begin Routine:
        blockNo += 1
        nCorr = 0
        nTrials = 0
        if blockNo == 1 or blockNo == 4:
            trialPick = '0:6'
            blockMsg = 'Creature practice'
        elif blockNo == 2 or blockNo == 5:
            trialPick = '6:12'
            blockMsg = 'Feature practice'
        else:
            trialPick = '0:12'
            blockMsg = 'Mixed block'
    TextComponent blockInstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $'This is block number ' + str(blockNo) + ' of 6. \n \n' + blockMsg + '\n Remember: \n Show mapping here. \n \n Continue with any key!'
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blockFB
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        PC = nCorr / nTrials * 100
        print(PC)
    TextComponent blockFBText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Percentage of correct responses: ' + str(round(PC, 1)) + '% \n Continue with any key!'
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine blockInstr
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $trialPick
      conditionsFile = ConditionsCongruent.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('targetWord', 'dragon'), ('targetType', 'creature'), ('targetCond', 'abstract'), ('corrKey', 'i'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'troll'), ('targetType', 'creature'), ('targetCond', 'abstract'), ('corrKey', 'i'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'cyclops'), ('targetType', 'creature'), ('targetCond', 'abstract'), ('corrKey', 'i'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'beetle'), ('targetType', 'creature'), ('targetCond', 'concrete'), ('corrKey', 'e'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'dolphin'), ('targetType', 'creature'), ('targetCond', 'concrete'), ('corrKey', 'e'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'horse'), ('targetType', 'creature'), ('targetCond', 'concrete'), ('corrKey', 'e'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'abstract'), ('targetType', 'feature'), ('targetCond', 'abstract'), ('corrKey', 'i'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'universal'), ('targetType', 'feature'), ('targetCond', 'abstract'), ('corrKey', 'i'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'general'), ('targetType', 'feature'), ('targetCond', 'abstract'), ('corrKey', 'i'), ('mapping', 'congruent')]),
        OrderedDict([('targetWord', 'specific'), ('targetType', 'feature'), ('targetCond', 'concrete'), ('corrKey', 'e'), ('mapping', 'congruent')])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
      Routine trial
      Routine trialFB
    LoopTerminator trials
    Routine blockFB
  LoopTerminator blocks
