PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'order': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = IATExp
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Routines
  Routine trial
    TextComponent targetText
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.25
      text [set every repeat] = $targetWord
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    KeyboardComponent resp
      allowedKeys = 'i','e'
      correctAns = $corrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      storeCorrect = True
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  Routine trialFB
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialFBmsg=[]
      Begin Routine:
        if resp.corr == 0:
            trialFBmsg = 'error!'
            trialFBdur = 0.5
        else:
            trialFBmsg = ' '
            trialFBdur = 0
            nCorr += 1
        nTrials += 1
    TextComponent trialFBText
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialFBdur
      text [set every repeat] = $trialFBmsg
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  Routine blockInstr
    CodeComponent countBlocks
      Code Type = Auto->JS
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      Begin Experiment:
        blockNo = 0
        blockMsg = ' '
      Begin Routine:
        blockNo += 1
        nCorr = 0
        nTrials = 0
        if blockNo == 1 or blockNo == 4:
            trialPick = '0:6'
            blockMsg = 'Creature practice.'
        elif blockNo == 2 or blockNo == 5:
            trialPick = '6:12'
            blockMsg = 'Feature practice.'
        else :
            trialPick = '0:12'
            blockMsg = 'Mixed block.'
    TextComponent blockInstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'This is block number ' + str(blockNo) + ' of 6. \n \n' + blockMsg + '\n Remember: \n' + shortInstr +' \n \n Continue with any key.'
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blockFB
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        PC = nCorr / nTrials *100
    TextComponent blockFBText
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Percentage of correct responses: ' + str(round(PC,1)) + ' %. \n \n Continue with any key.'
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine partsInstr
    TextComponent partsInstrText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr + '\n \n Press any key to continue.'
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine genInstr
    TextComponent genInstrText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome,
        just do as you are told....

        Press 'space' to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks, that's all!
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Flow
  Routine genInstr
  LoopInitiator parts loopType="TrialHandler"
    conditionsFile = $'PartOrder' + expInfo['order'] + '.xlsx'
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine partsInstr
    LoopInitiator blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine blockInstr
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $trialPick
        conditionsFile = $partsOrder
        loopType = random
        nReps = 1
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        Routine trial
        Routine trialFB
      LoopTerminator trials
      Routine blockFB
    LoopTerminator blocks
  LoopTerminator parts
  Routine end
