PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = IAT
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Routines
  Routine trial
    TextComponent targetStim
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.25
      text [set every repeat] = $targetWord
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    ImageComponent targetImage
      image [set every repeat] = $imageStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
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    KeyboardComponent resp
      allowedKeys = 'e','i'
      correctAns = $corrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      storeCorrect = True
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  Routine pickTrials
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialPick = []
        trialMsg = []
        blockNo = 0
        ns=[]
      Begin Routine:
        if blockNo == 0 or blockNo == 3:
            trialPick = range(6)#'0:6'#
            ns = 6
            trialMsg = 'Creature practice.'
        elif blockNo == 1 or blockNo == 4:
            trialPick = '6:12' #range(6,12)
            ns = 6
            trialMsg = 'Feature practice.'
        else:
            trialPick = '0:12'
            ns = 12
            trialMsg = 'Mixed.'

        blockNo += 1
        nCorrBlock = 0
    TextComponent instruText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Next block is number ' + str(blockNo) +  ' of 6:  \n \n' + trialMsg + '\n \n Remember: \n' + shortInstr + '\n \n Continue with any key!'
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialFB
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        trialFBtext=[]
      Begin Routine:
        if resp.corr:
            trialFBtext=' '
            trialFBdur=0
            nCorrBlock += 1
        else:
            trialFBtext='WRONG KEY!'
            trialFBdur=0.5
    TextComponent text
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialFBdur
      text [set every repeat] = $trialFBtext
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  Routine blockFB
    CodeComponent blockFBcode
      Code Type = Auto->JS
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      Begin Experiment:
        PC = []
      Begin Routine:
        PC = nCorrBlock / ns * 100
        print(PC)
        #ns = len(trials.data['resp.corr'])
        #PC = trials.data['resp.corr'].sum() / ns * 100
        #meanRT = trials.data['resp.rt'].mean() * 1000
    TextComponent blockFBtext
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Percentage of correct responses:  ' + str(round(PC)) + '%  \n  \n Continue with any key.' 
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine partInst
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        //thisExp=psychoJS.experiment;
        //win=psychoJS.window;
        //event=psychoJS.eventManager;
        //shuffle = util.shuffle;
        //Array.prototype.append = [].push;
        //sort = function(array) {
        //    return array.sort();
        //}
        //Array.prototype.count = function(value) {
        //let count = 0;
        //this.forEach(item => {
        //if (item === value) {
        //count++;
        //}
        //});
        //return count;
        //}
        //Array.prototype.index = [].indexOf;
        //webbrowser=window;
    TextComponent partinstruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Show instruction here: \n' + instr +'\n \n Continue with any key.'
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GenInst
    TextComponent genInstTxt
      color = grey
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Welcome

        Your task is to respond to single words presented in the centre of the screen according to word category.

        You will respond using the "E" and "I" keys with your left and right index fingers, respectively. The word category and response key assignment will be indicated to you before each block of trials. Read the instructions carefully. Respond as quickly and as accurately as possible!


        Press the spacebar to continue!
    KeyboardComponent spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        orderInd=int(expInfo['participant'])%2
        if orderInd == 1:
            order = 'A'
        elif orderInd == 0:
            order = 'B'
        else:
            print('This should not happen.')
Flow
  Routine GenInst
  LoopInitiator parts loopType="TrialHandler"
    conditionsFile = $"PartOrder"+ order +".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine partInst
    LoopInitiator blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine pickTrials
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $trialPick
        conditionsFile = $partsOrder
        loopType = random
        nReps = 1
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        Routine trial
        Routine trialFB
      LoopTerminator trials
      Routine blockFB
    LoopTerminator blocks
  LoopTerminator parts
