PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = PosnerExp
  logging level = debug
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    ImageComponent cue
      image [set every repeat] = $cue_file
      size = (0.3, 0.3)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent target
      image = images/target.png
      pos [set every repeat] = $(target_x, target_y)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.9
      texture resolution = 512
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    MouseComponent resp
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.9
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        resp.setPos(newPos=(0,0))
  Routine instructions
    TextComponent instructionsTxtx
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisInstruction
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    MouseComponent startExp
      clickable = StartButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent StartButton
      letterHeight = 0.02
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Click here to start
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  Routine end
    TextComponent endMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!

        Click on the button to end!
    PolygonComponent endButton
      fillColor = $[0,1,0]
      nVertices = 100
      pos = (0, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent endClick
      clickable = endButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator instrLoop loopType="TrialHandler"
    conditionsFile = InstructionsFile.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('thisInstruction', 'Hit the targets!')]),
      OrderedDict([('thisInstruction', 'Targets will appear on the left and the right')]),
      OrderedDict([('thisInstruction', 'Hit them as fast as you can!')])]
    Routine instructions
  LoopTerminator instrLoop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', 0.5), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', -0.5), ('is_valid', 'invalid')])]
    Routine trial
  LoopTerminator trials
  Routine end
